begintemplate FScell

public is_art
public init, topol, basic_shape, subsets, /*geom,*/ biophys//,   geom_nseg
public pre_list, connect2target
public x, y, z, position
public all, soma, dend,  basal_prox, basal_dist
public dendproxNo, denddistNo
public unscrProx, unscrDist


objref pre_list

proc init() {
  topol()
  subsets()
  //geom()
  biophys()
 // geom_nseg()
  pre_list = new List()
 // synapses()
  x = y = z = 0 // only change via position //aleka vladimirov 2013
}


create soma
create dend[58]

proc topol_1() {


  connect dend[0](0),soma(1)
  connect dend[1](0),dend[0](1)
  connect dend[2](0),dend[1](1)
  connect dend[3](0),dend[0](1)
  connect dend[4](0),dend[3](1)
  connect dend[5](0),dend[4](1)
  connect dend[6](0),soma(1)
  connect dend[7](0),dend[6](1)
  connect dend[8](0),dend[6](1)
  connect dend[9](0),soma(1)
  connect dend[10](0),dend[9](1)
  connect dend[11](0),dend[10](1)
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}

proc topol() {
  topol_1()
  
  basic_shape()
}

proc shape3d_1() {
  soma {pt3dclear()
    pt3dadd(-0.0001, 0, 0, 7.5594)
    pt3dadd(0, 0, 0, 7.5594)
    pt3dadd(-2.07, 3.39, 1.57, 9.0278)
    pt3dadd(-2.07, 3.39, 1.57, 9.0278)
    pt3dadd(-4.71, 5.57, 4.52, 4.6962)
    pt3dadd(-2.07, 3.39, 1.57, 9.0278)
    pt3dadd(-5.11, 8.13, 5.89, 5.7926)
    pt3dadd(1.18, 0.06, 0.17, 10.2236)
    pt3dadd(4.81, -2.47, -1.66, 12.3218)
    pt3dadd(7.33, -5.84, -3.42, 12.3722)
    pt3dadd(10.14, -9.57, -5.02, 11.5482)
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  }
}
proc shape3d_2() {
  dend[6] {
    pt3dadd(-134.28, -201.14, -108.73, 0.73)
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  }
}
proc shape3d_3() {
  dend[11] {
    pt3dadd(95.95, -347.36, -147.79, 0.18)
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  }
}
proc shape3d_4() {
  dend[15] {
    pt3dadd(-85.27, -226.34, -10.27, 0.55)
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  }
}
proc shape3d_5() {
  dend[25] {
    pt3dadd(122.93, -238.95, -49.85, 0.91)
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  }
}
proc shape3d_6() {
  dend[30] {
    pt3dadd(100.41, -204.58, 31.11, 0.73)
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  }
}
proc shape3d_7() {
  dend[34] {
    pt3dadd(-78.57, 298.2, -59.62, 0.4)
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  }
}
proc shape3d_8() {
  dend[35] {
    pt3dadd(-71.61, 249.19, 14.4, 0.55)
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  }
}
proc shape3d_9() {
  dend[37] {
    pt3dadd(-10.83, 284.57, -19.68, 0.55)
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  }
}
proc shape3d_10() {
  dend[40] {
    pt3dadd(-67.94, 190.66, -75.76, 0.4)
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  }
}
proc shape3d_11() {
  dend[43] {
    pt3dadd(4.62, 138.36, 1.48, 0.55)
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  }
}
proc shape3d_12() {
  dend[46] {
    pt3dadd(36.79, 96.43, 18.58, 0.73)
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  }
}
proc shape3d_13() {
  dend[47] {
    pt3dadd(132.1, 305.19, 7.37, 0.55)
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  }
}
proc shape3d_14() {
  dend[49] {
    pt3dadd(90.91, 173.02, -90.18, 0.73)
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  }
}
proc shape3d_15() {
  dend[52] {
    pt3dadd(-40.1, 192.16, -27.2, 0.55)
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  }
}
proc shape3d_16() {
  dend[53] {
    pt3dadd(0.71, 101.95, -17.25, 0.73)
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  }
}
proc shape3d_17() {
  dend[54] {
    pt3dadd(124.76, 297.54, -141.06, 0.36)
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  }
}
proc shape3d_18() {
  dend[57] {
    pt3dadd(84.67, 304.88, -27.2, 0.55)
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  }
}

proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
}


objref all

objref basal_prox, basal_dist
objref unscrProx, unscrDist
unscrProx = new Vector()
unscrDist = new Vector()



proc subsets() { local ward, dist, i, j 
	objref all
 // objref axonal
objref basal_prox, basal_dist
objref unscrProx, unscrDist
unscrProx = new Vector()
unscrDist = new Vector()


  basal_prox = new SectionList()
  basal_dist = new SectionList()
  soma{distance()}

  j=0
  i=0
//print "Denrite No!"
  for ward = 0, 57 dend[ward] {

 //print "DIAMETER    ", dend[ward].diam       // print the total length
         //   print "lENGTH   ", dend[ward].L       // print the total length
    dend[ward]{ dist = distance(0.5) }
//print dist
    if ( dist <= 100 ){
      basal_prox.append()
   //  print  "1"
                        //print dend[ward].diam(0.5)
      unscrProx.append(ward)
      
    }else{
      basal_dist.append()
   // print  "0"
                      //  print dend[ward].diam(0.5)
      unscrDist.append(ward)
      
    }

  }
all = new SectionList()
  soma all.append()
  basal_prox all.append()
  basal_dist all.append()
  
}


proc biophys() {



		dendproxNo=0
		denddistNo=0
		

	//Create public members for the number of proximal (distal) dendrites,
	//accessible through dot notation (i.e. myFS.dendproxNo):
		forsec basal_prox dendproxNo = dendproxNo + 1
		forsec basal_dist denddistNo = denddistNo + 1

	//Define electrophysiological properties:
		//..........................................................................................................................................................................
		soma_Nafin= 0.045/*//*0.025//0.060*3*/                                      
		soma_kdrin=0.018*2//*0.028//0.0018*2
		soma_Kslowin=0.000725/*//*0.1//*0.00006*0.1//0.000725*0.1 //*0.1 9/12/15*/
		soma_hin=0.00001/*//*10//*100//*100//*100//*/                                                    
		soma_kapin=0.0032//*2//*0.1//*2//*0.001
		soma_can=0.0003//*2 alexandra 17/12/2015
		soma_cat=0.001*2 //for dends
		soma_kctin=0.0001//*10//100//*100//*10                   
		soma_kcain=20*0.001//..001//0.5//*0   
		v_init=-68         
		//...........................................................................................................................................................................

		soma {
		
		        nseg= 5 //1 12/16
			insert pas
			cm=1.2//microF/cm2
			g_pas =1/7600                               
			e_pas = v_init
			Ra=172 //(Noerenberg et al, 2010 PNAS)

		insert Nafx
			gnafbar_Nafx= soma_Nafin*0.8*15

			insert kdrin
			gkdrbar_kdrin= soma_kdrin*1.2

			insert IKsin	
			gKsbar_IKsin= soma_Kslowin

			insert hin
			gbar_hin=soma_hin//ahp polla

			insert kapin
			gkabar_kapin=soma_kapin

			insert kctin
			gkcbar_kctin=soma_kctin
                        insert kcain
			gbar_kcain=soma_kcain//ahp gia ena

		          
		         insert cadynin // cai
		       

		}

			                
	
		      
		forsec basal_prox {
		
		        nseg=5
			insert pas
			cm=1.2//microF/cm2
			g_pas =1/7600  
			e_pas = v_init                                            
			Ra=142

			insert Nafx
			gnafbar_Nafx=soma_Nafin*0.4//*0.8//*1.2

			insert kdrin
			gkdrbar_kdrin=0.018*0.5
                        
                        insert kapin
			gkabar_kapin=soma_kapin*0.2//*1.2  //IA current for basal proximal dendrites                                                      

			insert can 
			gcabar_can = soma_can

			insert cat
			gcatbar_cat=soma_cat*0.1
		  
		        insert cal
		        gcalbar_cal=0.00003   // L type calcium channel

		        insert cadynin
		     
		}


		forsec basal_dist {
		
		        nseg=5
			insert pas
			cm=1.2           //microF/cm2
			g_pas =1/74300 
			e_pas = v_init                                            
			Ra=142

			insert Nafx
			gnafbar_Nafx=soma_Nafin*0.4*0.8//*0.8//*1.2

			insert kdrin
			gkdrbar_kdrin=0.018*0.5                                           
		        
                        insert kadin
                        gkabar_kadin=1.8*0.0018//*1.2      // IA current used in distal regions >100 microns from the soma
		       
                        insert cat
			gcatbar_cat=soma_cat*0.1

			insert can
			gcabar_can=soma_can
		    
		        insert cal
		        gcalbar_cal=0.00003 
		          
		       insert cadynin
		       }	
	       
		ko0_k_ion = 3.82   //mM
		ki0_k_ion = 140    //mM  
	
	
	//aleka
  /* aleka vladimirov 2013*/

  forsec all {                                   //vladimirov egrafe forall
	insert extracellular
	xraxial =  1e+09
	xraxial[1] =  1e+09
	xg = 1e+09
	xg[1] = 1e+09
	xc = 0
	xc[1] = 0
	e_extracellular = 0 
	} 
	} //end biophys()
	


proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}

func is_art() { return 0 }


endtemplate FScell






